<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="video fps" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:uEyeCapture">
          <p1:DeviceId xsi:nil="true" />
          <p1:ConfigFile>2048x2048_30fps_1p5ms_downstairs.ini</p1:ConfigFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>120</cv:BackgroundFrames>
          <cv:AdaptationRate>0.0005</cv:AdaptationRate>
          <cv:ThresholdValue>0</cv:ThresholdValue>
          <cv:ThresholdType>ToZero</cv:ThresholdType>
          <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ffmpeg</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="scr:PythonSource">
              <scr:Script>import datetime
@returns(str)
def generate():
  currentTime=datetime.datetime.now()
  yield currentTime.strftime('%Y%m%d%H%M%S')</scr:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Width</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Height</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="codec q" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cam id" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="video fps" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>import subprocess as sp
import datetime

@returns(bool)
def process(inputs):

  vid_width=str(inputs.Item5)
  vid_height=str(inputs.Item6)
  vid_rate=str(inputs.Item1)
  currentTime=inputs.Item2
  cam_id=str(inputs.Item3)
  codec_q=str(inputs.Item4)

  cmd='c:\\ffmpeg\\bin\\ffmpeg.exe -y -f rawvideo -vcodec rawvideo -s '+vid_width+'x'+vid_height+' -r '+vid_rate+' -pix_fmt gray -i \\\\.\\pipe\\p1 -q:v '+codec_q+' -vcodec mpeg4 -vtag xvid E:\\00_bonsai_ffmpeg_out\\out_id'+cam_id+'_'+vid_rate+'fps'+'_'+currentTime+'.avi'
  sp.Popen(cmd)
  return True</scr:Script>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="11" Label="Source3" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="11" Label="Source6" />
            <Edge From="3" To="11" Label="Source7" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="11" Label="Source5" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\p1</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>